CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Here you upload your ALIGNED phase image and all ALIGNED maldi ion images']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['disregard this module']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Here I created 4 images - image with name containing “phase” for the phase image and 3 maldi ion images. I select - set intensity range from “image bit-depth”, so it knows we are uploading 16 bit images hopefully']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "phase")
    Name to assign these images:phase_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ion_")
    Name to assign these images:maldi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['disregard?']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:phase_image
    Name the output image:RescaleIntensity_phase
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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notes:['']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
    Select the input image:RescaleIntensity_phase
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:2
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.08,1
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.01
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:cells
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:maldi
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:cells
    Name the output image:Cellmask
    Select the color format:uint16
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
MeasureObjectSizeShape:[module_num:9|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notes:['Then you do your measuring thing, on initial, nuclei objects (non-expanded)']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
    Select object sets to measure:cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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notes:['Select all ion images here, I don’t know if you need the phase intensity measured too']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
    Select images to measure:maldi
    Select objects to measure:IdentifySecondaryObjects

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:RescaleIntensity_phase
    Select objects to measure:cells

MeasureTexture:[module_num:12|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
    Select images to measure:RescaleIntensity_phase
    Select objects to measure:cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureGranularity:[module_num:13|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
    Select images to measure:RescaleIntensity_phase
    Measure within objects?:Yes
    Select objects to measure:cells
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cellmask
    Select method for constructing file names:Sequential numbers
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    Enter single file name:OrigGray
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\s1w4_cp
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\s1w4_cp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:phase_maldi
    Overwrite existing files without warning?:No
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